PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '01', 'session': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = pix
  Use version = 2025.1.1
  Window size (pixels) = [1920, 1080]
  expName = human-llm-alignment
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine PromptRoutine
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    TextboxComponent ParticipantResponse
      bold = False
      editable = True
      font = Courier New
      letterHeight = 30
      pos = (0, -250)
      size = (500, 200)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent PromptText
      font = Courier New
      letterHeight = 30
      startVal [time (s)] = 0.0
      text [set every repeat] = $scenario
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    CodeComponent prompt_code
      Code Type = Py
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      Before Experiment:
        import sys
        import os
      Begin Experiment:
        participant_resp = ""
      Each Frame:
        from psychopy import event

        # Check if participant has typed something AND pressed return
        keys = event.getKeys()
        if ParticipantResponse.text and 'return' in keys:
            # mark that the response is complete
            continueRoutine = False  # ends the current routine
      End Routine:
        import requests
        import re
        from sentence_transformers import SentenceTransformer, util
        import torch
        import random
        import time

        model = SentenceTransformer("sentence-transformers/all-MiniLM-L6-v2")
        OPENROUTER_API_KEY = "..." # add your api key!!
        MODEL = "openai/gpt-3.5-turbo-instruct"
        print("openai/gpt-3.5-turbo-instruct")
        DEVICE = "cuda" if torch.cuda.is_available() else "cpu"
        # model = SentenceTransformer(r"C:\Users\Display\Desktop\all-MiniLM-L6-v2", device=DEVICE)
        print("Sentence Transformer found!")

        def generate_llm_responses_openrouter(scenario, participant_answer, n=100):
            url = "https://openrouter.ai/api/v1/chat/completions"

            prompt = (
                f"Scenario: {scenario}\n"
                f"Participant answer: {participant_answer}\n\n"
                f"Generate {n} short, natural, different aligned responses (max 20 words).\n"
                f"Return each response on a separate line.\n"
            )

            headers = {
                "Authorization": f"Bearer {OPENROUTER_API_KEY}",
                "Content-Type": "application/json"
            }

            payload = {
                "model": MODEL,
                "messages": [{"role": "user", "content": prompt}],
                "max_tokens": 800,
                "temperature": 0.7,
                "top_p": 0.9,
                "n": 1
            }

            max_retries = 5
            for attempt in range(max_retries):
                r = requests.post(url, headers=headers, json=payload)
                if r.status_code == 200:
                    resp_json = r.json()
                    text = resp_json["choices"][0]["message"]["content"]

                    # Zeilen filtern + führende Zahlen entfernen
                    responses = [
                        re.sub(r"^\d+\.\s*", "", l.strip())
                        for l in text.split("\n")
                        if len(l.split()) > 2
                    ]
                    print(len(responses), "responses generated")
                    return responses[:n]  # exakt n Antworten
                elif r.status_code == 429:
                    wait_time = 5 * (attempt + 1)
                    print(f"Rate-limited! Warte {wait_time}s und retry {attempt+1}/{max_retries}...")
                    time.sleep(wait_time)
                else:
                    raise ValueError(f"Request failed: {r.status_code} {r.text}")

            raise ValueError("Max retries reached due to rate limiting.")
            return responses[:n]  # exakt n Antworten


        # -----------------------------------------------------------
        # 2) Alignment + Similarity berechnen
        # -----------------------------------------------------------
        def compute_alignment_responses(scenario, participant_answer):
            high = participant_answer.strip()
            # 100 Modellantworten generieren
            responses = generate_llm_responses_openrouter(scenario, participant_answer, 100)

            # Embeddings
            emb_llm = model.encode(responses, convert_to_tensor=True)
            emb_part = model.encode(participant_answer, convert_to_tensor=True)

            sims = util.cos_sim(emb_part, emb_llm)[0].cpu().tolist()

            # Sortieren nach Ähnlichkeit
            scored = sorted(zip(responses, sims), key=lambda x: x[1], reverse=True)

            # high = participant_answer.strip()
            medium = scored[len(scored)//2][0]
            low = random.choice(scored[-5:])[0]

            return {
                "high": {"text": high, "sim": 1.0},
                "medium": {"text": medium, "sim": scored[len(scored)//2][1]},
                "low": {"text": low, "sim": scored[-1][1]},
                "all_sims": sims
            }

        participant_answer = ParticipantResponse.text.strip()
        scenario_text = scenario

        print("Scenario: ", scenario)
        print("Answer: ", participant_answer)

        thisExp.addData('scenario', scenario)
        thisExp.addData('participant_answer', participant_answer)

        alignments = compute_alignment_responses(scenario_text, participant_answer)

        print("Medium answer: ", alignments['medium']['text'])
        print("Medium sim: ", alignments['medium']['sim'])
        print("Low answer: ", alignments['low']['text'])
        print("Low sim: ", alignments['low']['sim'])

        thisExp.addData('ai_high', alignments['high']['text'])
        thisExp.addData('ai_medium', alignments['medium']['text'])
        thisExp.addData('ai_low', alignments['low']['text'])
        thisExp.addData('sim_medium', alignments['medium']['sim'])
        thisExp.addData('sim_low', alignments['low']['sim'])

        expInfo['alignments'] = alignments
    CodeComponent savePromptTime
      Code Type = Auto->JS
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      Begin Routine:
        import time
        thisExp.addData("prompt.started_Unix", time.time())
      End Routine:
        import time
        thisExp.addData("prompt.stopped_Unix", time.time())
  Routine WaitRoutine
    RoutineSettingsComponent WaitRoutine
      disabled = True
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    TextComponent fix
      font = Courier New
      letterHeight = 20
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Please wait...
        Generating LLM answer...
    StaticComponent ISI
      saveData = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent saveBeginWaitTime
      Code Type = Auto->JS
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      Begin Routine:
        import time
        thisExp.addData("wait.started_Unix", time.time())
      End Routine:
        import time
        thisExp.addData("wait.stopped_Unix", time.time())
  Routine AIRoutine
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    TextboxComponent AI_Response
      bold = False
      durationEstim = 5
      editable = False
      font = Courier New
      letterHeight = 30
      size = (500,200)
      startVal [time (s)] = 0.0
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    CodeComponent ai_response_code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core, event, data
        import random, json, time
        import subprocess
        import re
        from datetime import datetime
      Begin Routine:
        from psychopy import parallel
        from psychopy import core, event
        import time, random

        #ai_delay = 3.0  # Sekunden
        #ai_shown = False
        #trial_clock = core.Clock()
        #trial_clock.reset()

        # Alignment aus Excel-Tabelle verwenden
        alignment = Alignment.lower().strip()  # z. B. "high"

        # Zugriff auf gespeicherte Texte
        alignments = expInfo['alignments']
        ai_text = alignments[alignment]['text']

        # anzeigen
        AI_Response.setText(ai_text)

        # speichern
        print("LLM Alignment:", alignment)
        print("LLM Response:", ai_text)
        thisExp.addData('AI_shown_alignment', alignment)
        thisExp.addData('AI_shown_text', ai_text)
      Each Frame:
        keys = event.getKeys()
        if 'space' in keys:
            continueRoutine = False
            event.clearEvents()
    CodeComponent saveBeginAIResponseTime
      Code Type = Auto->JS
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      Begin Routine:
        import time
        thisExp.addData("ai_response.started_Unix", time.time())
      End Routine:
        import time
        thisExp.addData("ai_response.stopped_Unix", time.time())
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 5
      text = Press SPACE to continue
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  Routine RatingRoutine
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    SliderComponent slider
      durationEstim = 10
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      initVal = 50
      labels = ("Strongly disagree","Strongly agree")
      letterHeight = 20
      pos = (0, -150)
      size = (1000,80)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,100)
      units = pix
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    CodeComponent slider_code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import event
      Begin Routine:
        from psychopy import event
        win.mouseVisible = True
        slider.reset()
      Each Frame:
        if slider.getRating() is not None:
            continueRoutine = False  # end the routine as soon as user made a selection
      End Routine:
        win.mouseVisible = False
        rating = slider.getRating()
    TextComponent rating_text
      durationEstim = 10
      font = Courier New
      letterHeight = 30
      startVal [time (s)] = 0.0
      text = The LLM answer was aligned with my own answer for this scenario.
      units = pix
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    MouseComponent mouse
      clickable = slider
      durationEstim = 10
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    CodeComponent saveRatingData
      Code Type = Auto->JS
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      Begin Routine:
        import time
        thisExp.addData("rating.started_Unix", time.time())
      End Routine:
        import time
        thisExp.addData("rating.stopped_Unix", time.time())

        rating = slider.getRating()
        rt = slider.getRT()

        thisExp.addData('slider.rating', rating)
        thisExp.addData('slider.rt', rt)
  Routine thanks
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    TextComponent endScreen
      letterHeight = 50
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
    CodeComponent end_code
      Code Type = Auto->JS
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      Begin Routine:
        import time
        thisExp.addData("experimentStop.started_Unix", time.time())
      End Routine:
        import time
        thisExp.addData("experimentStop.stopped_Unix", time.time())
  Routine eyelinkSetup
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    TextComponent elInstructions
      letterHeight = 50
      startVal [time (s)] = 0
      text = Press any key to start Camera Setup
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    KeyboardComponent key_resp
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent elConnect
      Code Type = Py
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      Before Experiment:
        # DESCRIPTION:
        # This is a basic example, which shows how connect to and disconnect from
        # the tracker, how to open and close data file, how to start/stop recording,
        # and the standard messages for integration with Data Viewer.
        # Each trial presents a fixation cross for 0.5 seconds followed by an image
        # for 4 seconds.  A keyboard press terminates the trial.

        # The code components in the eyelinkSetup, eyelinkStartRecording, trial, and
        # eyelinkStopRecording routines handle communication with the Host PC/EyeLink
        # system.  All the code components are set to Code Type Py, and each code
        # component may have code in the various tabs (e.g., Before Experiment, Begin
        # Experiment, etc.)

        # Last updated: June 26, 2024

        # This Before Experiment tab of the elConnect component imports some
        # modules we need, manages data filenames, allows for dummy mode configuration
        # (for testing), connects to the Host PC, and defines some helper function
        # definitions (which are called later)

        import pylink
        import time
        import platform
        from PIL import Image  # for preparing the Host backdrop image
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
        from string import ascii_letters, digits
        from psychopy import gui

        # Switch to the script folder
        script_path = os.path.dirname(sys.argv[0])
        if len(script_path) != 0:
            os.chdir(script_path)

        # Set this variable to True if you use the built-in retina screen as your
        # primary display device on macOS. If have an external monitor, set this
        # variable True if you choose to "Optimize for Built-in Retina Display"
        # in the Displays preference settings.
        use_retina = False

        # Set this variable to True to run the script in "Dummy Mode"
        dummy_mode = False

        # Set up EDF data file name and local data folder
        #
        # The EDF data filename should not exceed 8 alphanumeric characters
        # use ONLY number 0-9, letters, & _ (underscore) in the filename
        edf_fname = 'TEST'

        # Prompt user to specify an EDF data filename
        # before we open a fullscreen window
        dlg_title = "Enter EDF Filename"
        dlg_prompt = "Please enter a file name with 8 or fewer characters [letters, numbers, and underscore]."
        # loop until we get a valid filename
        while True:
            dlg = gui.Dlg(dlg_title)
            dlg.addText(dlg_prompt)
            dlg.addField("Filename", "EDF Filename:","Test")
            # show dialog and wait for OK or Cancel
            ok_data = dlg.show()
            if dlg.OK:  # if ok_data is not None
                print("EDF data filename: {}".format(ok_data["Filename"]))
            else:
                print("user cancelled")
                core.quit()
                sys.exit()

            # get the string entered by the experimenter
            tmp_str = ok_data["Filename"]
            # strip trailing characters, ignore the ".edf" extension
            edf_fname = tmp_str.rstrip().split(".")[0]

            # check if the filename is valid (length <= 8 & no special char)
            allowed_char = ascii_letters + digits + "_"
            if not all([c in allowed_char for c in edf_fname]):
                print("ERROR: Invalid EDF filename")
            elif len(edf_fname) > 8:
                print("ERROR: EDF filename should not exceed 8 characters")
            else:
                break

        # Set up a folder to store the EDF data files and the associated resources
        # e.g., files defining the interest areas used in each trial
        results_folder = 'results'
        if not os.path.exists(results_folder):
            os.makedirs(results_folder)

        # We download EDF data file from the EyeLink Host PC to the local hard
        # drive at the end of each testing session, here we rename the EDF to
        # include session start date/time
        time_str = time.strftime("_%Y_%m_%d_%H_%M", time.localtime())
        session_identifier = edf_fname + time_str

        # create a folder for the current testing session in the "results" folder
        session_folder = os.path.join(results_folder, session_identifier)
        if not os.path.exists(session_folder):
            os.makedirs(session_folder)

        # For macOS users check if they have a retina screen
        if 'Darwin' in platform.system():
            dlg = gui.Dlg("Retina Screen?")
            dlg.addText("What type of screen will the experiment run on?")
            dlg.addField("Screen Type", choices=["High Resolution (Retina, 2k, 4k, 5k)", "Standard Resolution (HD or lower)"])
            # show dialog and wait for OK or Cancel
            ok_data = dlg.show()
            if dlg.OK:
                if dlg.data["Screen Type"] == "High Resolution (Retina, 2k, 4k, 5k)":
                    use_retina = True
                else:
                    use_retina = False
            else:
                print('user cancelled')
                core.quit()
                sys.exit()

        # Step 1: Connect to the EyeLink Host PC
        #
        # The Host IP address, by default, is "100.1.1.1".
        # the "el_tracker" objected created here can be accessed through the Pylink
        # Set the Host PC address to "None" (without quotes) to run the script
        # in "Dummy Mode"
        if dummy_mode:
            el_tracker = pylink.EyeLink(None)
        else:
            try:
                el_tracker = pylink.EyeLink("100.1.1.1")
            except RuntimeError as error:
                dlg = gui.Dlg("Dummy Mode?")
                dlg.addText("Couldn't connect to tracker at 100.1.1.1 -- continue in Dummy Mode?")
                # show dialog and wait for OK or Cancel
                ok_data = dlg.show()
                if dlg.OK:  # if ok_data is not None
                    dummy_mode = True
                    el_tracker = pylink.EyeLink(None)
                else:
                    print('user cancelled')
                    core.quit()
                    sys.exit()

        # Define some helper functions for screen drawing
        # and exiting trials/sessions early
        def clear_screen(win,genv):
            """ clear up the PsychoPy window"""
            win.fillColor = genv.getBackgroundColor()
            win.flip()

        def show_msg(win, genv, text, wait_for_keypress=True):
            """ Show task instructions on screen"""
            scn_width, scn_height = win.size
            msg = visual.TextStim(win, text,
                                  color=genv.getForegroundColor(),
                                  wrapWidth=scn_width/2)
            clear_screen(win,genv)
            msg.draw()
            win.flip()

            # wait indefinitely, terminates upon any key press
            if wait_for_keypress:
                kb = keyboard.Keyboard()
                #keys = kb.getKeys(['Enter'], waitRelease=False)
                waitKeys = kb.waitKeys(keyList=None, waitRelease=True, clear=True)
                clear_screen(win,genv)

        def terminate_task(genv,edf_file,session_folder,session_identifier):
            """ Terminate the task gracefully and retrieve the EDF data file
            """
            el_tracker = pylink.getEYELINK()

            if el_tracker.isConnected():
                # Terminate the current trial first if the task terminated prematurely
                error = el_tracker.isRecording()
                if error == pylink.TRIAL_OK:
                    abort_trial()

                # Put tracker in Offline mode
                el_tracker.setOfflineMode()

                # Clear the Host PC screen and wait for 500 ms
                el_tracker.sendCommand('clear_screen 0')
                pylink.msecDelay(500)

                # Close the edf data file on the Host
                el_tracker.closeDataFile()

                # Show a file transfer message on the screen
                msg = 'EDF data is transferring from EyeLink Host PC...'
                show_msg(win, genv, msg, wait_for_keypress=False)

                # Download the EDF data file from the Host PC to a local data folder
                # parameters: source_file_on_the_host, destination_file_on_local_drive
                local_edf = os.path.join(session_folder, session_identifier + '.EDF')
                try:
                    el_tracker.receiveDataFile(edf_file, local_edf)
                except RuntimeError as error:
                    print('ERROR:', error)

                # Close the link to the tracker.
                el_tracker.close()

            # close the PsychoPy window
            win.close()

            # quit PsychoPy
            core.quit()
            sys.exit()

        def abort_trial():
            """Ends recording """
            el_tracker = pylink.getEYELINK()

            # Stop recording
            if el_tracker.isRecording():
                # add 100 ms to catch final trial events
                pylink.pumpDelay(100)
                el_tracker.stopRecording()

            # Send a message to clear the Data Viewer screen
            bgcolor_RGB = (128, 128, 128)
            el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)

            # send a message to mark trial end
            el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_ERROR)

            return pylink.TRIAL_ERROR
      Begin Experiment:
        # This Begin Experiment tab of the elConnect component opens the EDF, gets graphic
        # information from Psychopy, configures some eye tracker settings, logs the screen
        # resolution for Data Viewer via a DISPLAY_COORDS message, and configures a
        # graphics environment for eye tracker setup/calibration

        el_tracker = pylink.getEYELINK()
        # Step 2: Open an EDF data file on the Host PC
        global edf_fname
        edf_file = edf_fname + ".EDF"
        try:
            el_tracker.openDataFile(edf_file)
        except RuntimeError as err:
            print('ERROR:', err)
            # close the link if we have one open
            if el_tracker.isConnected():
                el_tracker.close()
            core.quit()
            sys.exit()

        # Add a header text to the EDF file to identify the current experiment name
        # This is OPTIONAL. If your text starts with "RECORDED BY " it will be
        # available in DataViewer's Inspector window by clicking
        # the EDF session node in the top panel and looking for the "Recorded By:"
        # field in the bottom panel of the Inspector.
        preamble_text = 'RECORDED BY %s' % os.path.basename(__file__)
        el_tracker.sendCommand("add_file_preamble_text '%s'" % preamble_text)

        # Step 3: Configure the tracker
        #
        # Put the tracker in offline mode before we change tracking parameters
        el_tracker.setOfflineMode()

        # Get the software version:  1-EyeLink I, 2-EyeLink II, 3/4-EyeLink 1000,
        # 5-EyeLink 1000 Plus, 6-Portable DUO
        eyelink_ver = 0  # set version to 0, in case running in Dummy mode
        if not dummy_mode:
            vstr = el_tracker.getTrackerVersionString()
            eyelink_ver = int(vstr.split()[-1].split('.')[0])
            # print out some version info in the shell
            print('Running experiment on %s, version %d' % (vstr, eyelink_ver))

        # File and Link data control
        # what eye events to save in the EDF file, include everything by default
        file_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
        # what eye events to make available over the link, include everything by default
        link_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,BUTTON,FIXUPDATE,INPUT'
        # what sample data to save in the EDF data file and to make available
        # over the link, include the 'HTARGET' flag to save head target sticker
        # data for supported eye trackers
        if eyelink_ver > 3:
            file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,RAW,AREA,HTARGET,GAZERES,BUTTON,STATUS,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,HTARGET,STATUS,INPUT'
        else:
            file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,PUPIL,AREA,GAZERES,BUTTON,STATUS,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,STATUS,INPUT'
        el_tracker.sendCommand("file_event_filter = %s" % file_event_flags)
        el_tracker.sendCommand("file_sample_data = %s" % file_sample_flags)
        el_tracker.sendCommand("link_event_filter = %s" % link_event_flags)
        el_tracker.sendCommand("link_sample_data = %s" % link_sample_flags)

        # Optional tracking parameters
        # Sample rate, 250, 500, 1000, or 2000, check your tracker specification
        # if eyelink_ver > 2:
        #     el_tracker.sendCommand("sample_rate 1000")
        # Choose a calibration type, H3, HV3, HV5, HV13 (HV = horizontal/vertical),
        el_tracker.sendCommand("calibration_type = HV9")
        # Set a gamepad button to accept calibration/drift check target
        # You need a supported gamepad/button box that is connected to the Host PC
        el_tracker.sendCommand("button_function 5 'accept_target_fixation'")

        # get the native screen resolution used by PsychoPy
        scn_width, scn_height = win.size
        # resolution fix for Mac retina displays
        if 'Darwin' in platform.system():
            if use_retina:
                scn_width = int(scn_width/2.0)
                scn_height = int(scn_height/2.0)

        # Pass the display pixel coordinates (left, top, right, bottom) to the tracker
        # see the EyeLink Installation Guide, "Customizing Screen Settings"
        el_coords = "screen_pixel_coords = 0 0 %d %d" % (scn_width - 1, scn_height - 1)
        el_tracker.sendCommand(el_coords)

        # Write a DISPLAY_COORDS message to the EDF file
        # Data Viewer needs this piece of info for proper visualization, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        dv_coords = "DISPLAY_COORDS  0 0 %d %d" % (scn_width - 1, scn_height - 1)
        el_tracker.sendMessage(dv_coords)

        # Configure a graphics environment (genv) for tracker calibration
        genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
        print(genv)  # print out the version number of the CoreGraphics library
      End Experiment:
        # This End Experiment tab of the elConnect component calls the
        # terminate_task helper function to get the EDF file and close the connection
        # to the Host PC

        # Disconnect, download the EDF file, then terminate the task
        terminate_task(genv,edf_file,session_folder,session_identifier)
      End Routine:
        # This End Routine tab of the elConnect component configures some
        # graphics options for calibration, and then performs a camera setup
        # so that you can set up the eye tracker and calibrate/validate the participant

        # Set background and foreground colors for the calibration target
        # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
        foreground_color = (-1, -1, -1)
        background_color = tuple(win.color)
        genv.setCalibrationColors(foreground_color, background_color)

        # Set up the calibration target
        #
        # The target could be a "circle" (default), a "picture", a "movie" clip,
        # or a rotating "spiral". To configure the type of calibration target, set
        # genv.setTargetType to "circle", "picture", "movie", or "spiral", e.g.,
        # genv.setTargetType('picture')
        #
        # Use genv.setMovieTarget() to set a "movie" target
        # genv.setMovieTarget(os.path.join('videos', 'calibVid.mov'))

        # Use a picture as the calibration target
        genv.setTargetType('picture')
        genv.setPictureTarget(os.path.join('images', 'fixTarget.bmp'))

        # Configure the size of the calibration target (in pixels)
        # this option applies only to "circle" and "spiral" targets
        # genv.setTargetSize(24)

        # Beeps to play during calibration, validation and drift correction
        # parameters: target, good, error
        #     target -- sound to play when target moves
        #     good -- sound to play on successful operation
        #     error -- sound to play on failure or interruption
        # Each parameter could be ''--default sound, 'off'--no sound, or a wav file
        genv.setCalibrationSounds('', '', '')

        # resolution fix for macOS retina display issues
        if use_retina:
            genv.fixMacRetinaDisplay()

        #clear the screen before we begin Camera Setup mode
        clear_screen(win,genv)

        # Request Pylink to use the PsychoPy window we opened above for calibration
        pylink.openGraphicsEx(genv)

        # Peform a Camera Setup (eye tracker calibration)
        # skip this step if running the script in Dummy Mode
        if not dummy_mode:
            try:
                el_tracker.doTrackerSetup()
            except RuntimeError as err:
                print('ERROR:', err)
                el_tracker.exitCalibration()
        clear_screen(win,genv)
    CodeComponent saveBeginSetupTime
      Code Type = Auto->JS
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      Begin Routine:
        import time
        thisExp.addData("el_setup.started_Unix", time.time())
      End Routine:
        import time
        thisExp.addData("el_recording.stopped_Unix", time.time())
  Routine instruct
    RoutineSettingsComponent instruct
      disabled = True
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    TextComponent taskInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ready for the experiment?

        Press SPACE key to continue
    KeyboardComponent ready
      allowedKeys = 'space'
      correctAns = thisTrial.corrAns
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent saveInstructTime
      Code Type = Auto->JS
      disabled = True
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      End Routine:
        import time
        #thisExp.addData("instructions.stopped_Unix", time.time())
    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        from psychopy import event

        # Check if participant has pressed space
        keys = event.getKeys()
        if 'space' in keys:
            # mark that the response is complete
            continueRoutine = False  # ends the current routine
  Routine eyelinkStartRecording
    RoutineSettingsComponent eyelinkStartRecording
      disabled = True
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    CodeComponent elStartRecord
      Code Type = Py
      disabled = True
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      Begin Experiment:
        # Create an array of pixels to assist in transferring content to the Host PC backdrop
        rgbBGColor = (128,128,128)
        blankHostPixels = [[rgbBGColor for i in range(scn_width)]
            for j in range(scn_height)]
      Begin Routine:
        # This Begin Routine tab of the elStartRecord component draws some feedback
        # graphics (image and a simple shape) on the Host PC, sends a trial start
        # message to the EDF, performs drift check/drift correct, and starts eye tracker
        # recording

        # get a reference to the currently active EyeLink connection
        el_tracker = pylink.getEYELINK()

        # put the tracker in the offline mode first
        el_tracker.setOfflineMode()

        # clear the host screen before we draw the backdrop
        el_tracker.sendCommand('clear_screen 0')
        # imagesAndComponentsStringList value = ['trialImage,image']
        # imagesAndComponentsList value = [['trialImage', 'image']]
        # imagesAndComponentsListString value = [[trialImage, image]]
        # Send image components to the Host PC backdrop to serve as landmarks during recording
        # The method bitmapBackdrop() requires a step of converting the
        # image pixels into a recognizable format by the Host PC.
        # pixels = [line1, ...lineH], line = [pix1,...pixW], pix=(R,G,B)
        # the bitmapBackdrop() command takes time to return, not recommended
        # for tasks where the ITI matters, e.g., in an event-related fMRI task
        # parameters: width, height, pixel, crop_x, crop_y,
        #             crop_width, crop_height, x, y on the Host, drawing options
        # get the array of blank pixels where each pixel corresponds to win.color
        pixels = blankHostPixels[::]

        # Make a list of image components to be transferred
        # Each item in the list should itself be a list, where the first item is
        # the name of the image file to be transferred and the second
        # is the name of the component handling the presentation of the image
        imagesAndComponentsListForHostBackdrop = [[targetImage+"target.png", image]]
        # go through each image and replace the pixels in the blank array with the image pixels
        for thisImageFileComponentPair in imagesAndComponentsListForHostBackdrop:
            thisImageFile = thisImageFileComponentPair[0]
            thisImageComponent = thisImageFileComponentPair[1]
            thisImageComponent.setImage(thisImageFile)
            if "Image" in str(thisImageComponent.__class__):
                # Use the code commented below to convert the image and send the backdrop
                im = Image.open(script_path + "/" + thisImageFile)
                thisImageComponent.elPos = eyelink_pos(thisImageComponent.pos,[scn_width,scn_height])
                thisImageComponent.elSize = eyelink_size(thisImageComponent.size,[scn_width,scn_height])
                imWidth = int(round(thisImageComponent.elSize[0]))
                imHeight = int(round(thisImageComponent.elSize[1]))
                imLeft = int(round(thisImageComponent.elPos[0]-thisImageComponent.elSize[0]/2))
                imTop = int(round(thisImageComponent.elPos[1]-thisImageComponent.elSize[1]/2))
                im = im.resize((imWidth,imHeight))
                # Access the pixel data of the image
                img_pixels = list(im.getdata())
                # Check to see if the image goes off the screen
                # If so, adjust the coordinates appropriately
                if imLeft < 0:
                    imTransferLeft = 0
                else:
                    imTransferLeft = imLeft
                if imTop < 0:
                    imTransferTop = 0
                else:
                    imTransferTop = imTop
                if imLeft + imWidth > scn_width:
                    imTransferRight = scn_width
                else:
                    imTransferRight = imLeft+imWidth
                if imTop + imHeight > scn_height:
                    imTransferBottom = scn_height
                else:
                    imTransferBottom = imTop+imHeight
                imTransferImageLineStartX = imTransferLeft-imLeft
                imTransferImageLineEndX = imTransferRight-imTransferLeft+imTransferImageLineStartX
                imTransferImageLineStartY = imTransferTop-imTop
                for y in range(imTransferBottom-imTransferTop):
                    pixels[imTransferTop+y][imTransferLeft:imTransferRight] = \
                        img_pixels[(imTransferImageLineStartY + y)*imWidth+imTransferImageLineStartX:\
                        (imTransferImageLineStartY + y)*imWidth + imTransferImageLineEndX]
            else:
                print("WARNING: Image Transfer Not Supported For non-Image Component %s)" % str(thisComponent.__class__))
        # transfer the full-screen pixel array to the Host PC
        el_tracker.bitmapBackdrop(scn_width,scn_height, pixels,\
            0, 0, scn_width, scn_height, 0, 0, pylink.BX_MAXCONTRAST)

        # OPTIONAL: draw landmarks and texts on the Host screen
        # In addition to backdrop image, You may draw simples on the Host PC to use
        # as landmarks. For illustration purposes, here we draw a box
        # For a list of supported draw commands, see the "COMMANDS.INI" file on the
        # Host PC (under /elcl/exe)
        left = int(scn_width/2.0) - 60
        top = int(scn_height/2.0) - 60
        right = int(scn_width/2.0) + 60
        bottom = int(scn_height/2.0) + 60
        draw_cmd = 'draw_filled_box %d %d %d %d 1' % (left, top, right, bottom)
        el_tracker.sendCommand(draw_cmd)

        # send a "TRIALID" message to mark the start of a trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        el_tracker.sendMessage('TRIALID %d' % trial_index)

        # record_status_message : show some info on the Host PC
        # here we show how many trial has been tested
        status_msg = 'TRIAL number %d' % trial_index
        el_tracker.sendCommand("record_status_message '%s'" % status_msg)

        # drift check
        # we recommend drift-check at the beginning of each trial
        # the doDriftCorrect() function requires target position in integers
        # the last two arguments:
        # draw_target (1-default, 0-draw the target then call doDriftCorrect)
        # allow_setup (1-press ESCAPE to recalibrate, 0-not allowed)
        # Skip drift-check if running the script in Dummy Mode
        while not dummy_mode:
            # terminate the task if no longer connected to the tracker or
            # user pressed Ctrl-C to terminate the task
            if (not el_tracker.isConnected()) or el_tracker.breakPressed():
                terminate_task(genv,edf_file,session_folder,session_identifier)
            # drift-check and re-do camera setup if ESCAPE is pressed
            try:
                error = el_tracker.doDriftCorrect(int(scn_width/2.0),
                                                  int(scn_height/2.0), 1, 1)
                # break following a success drift-check
                if error is not pylink.ESC_KEY:
                    break
            except:
                pass

        # put tracker in idle/offline mode before recording
        el_tracker.setOfflineMode()

        # Start recording
        # arguments: sample_to_file, events_to_file, sample_over_link,
        # event_over_link (1-yes, 0-no)
        try:
            el_tracker.startRecording(1, 1, 1, 1)
        except RuntimeError as error:
            print("ERROR:", error)
            abort_trial()

        # Allocate some time for the tracker to cache some samples before allowing
        # trial stimulus presentation to proceed
        pylink.pumpDelay(100)
    CodeComponent saveRecordStartTime
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        import time
        thisExp.addData("el_recording.started_Unix", time.time())
      End Routine:
        import time
        thisExp.addData("el_recording.stopped_Unix", time.time())
  Routine eyelinkStopRecording
    RoutineSettingsComponent eyelinkStopRecording
      disabled = True
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    CodeComponent elStopRecord
      Code Type = Py
      disabled = True
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      End Routine:
        # This End Routine tab of the elStopRecord component clears the
        # screen (and sends a message to mark the clearing), stops recording, sends
        # a trial end message, and increments a trial counter variable

        # clear the screen
        clear_screen(win,genv)
        el_tracker.sendMessage('blank_screen')
        # send a message to clear the Data Viewer screen as well
        el_tracker.sendMessage('!V CLEAR 128 128 128')

        # stop recording; add 100 msec to catch final events before stopping
        pylink.pumpDelay(100)
        el_tracker.stopRecording()

        # send a 'TRIAL_RESULT' message to mark the end of trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        el_tracker.sendMessage('TRIAL_RESULT %d' % 0)

        # update the trial counter for the next trial
        trial_index = trial_index + 1
    CodeComponent saveStopRecordTime
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        import time
        thisExp.addData("el_recordingStop.started_Unix", time.time())
      End Routine:
        import time
        thisExp.addData("el_recordingStop.stopped_Unix", time.time())
  Routine break_3
    RoutineSettingsComponent break_3
      disabled = True
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    TextComponent breakOption
      letterHeight = 18
      startVal [time (s)] = 0.0
      units = pix
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      text:
        Do you want to take a break?

        Press SPACE to continue or M to re-callibrate
    KeyboardComponent key_resp_break
      allowedKeys = 'space', 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeReCalibrate
      Code Type = Py
      disabled = True
      End Routine:
        # This End Routine tab of the elConnect component configures some
        # graphics options for calibration, and then performs a camera setup
        # so that you can set up the eye tracker and calibrate/validate the participant

        # Set background and foreground colors for the calibration target
        # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
        foreground_color = (-1, -1, -1)
        background_color = tuple(win.color)
        pylink.closeGraphics() #closing screen

        genv.setCalibrationColors(foreground_color, background_color)

        # Set up the calibration target
        #
        # The target could be a "circle" (default), a "picture", a "movie" clip,
        # or a rotating "spiral". To configure the type of calibration target, set
        # genv.setTargetType to "circle", "picture", "movie", or "spiral", e.g.,
        # genv.setTargetType('picture')
        #
        # Use genv.setMovieTarget() to set a "movie" target
        # genv.setMovieTarget(os.path.join('videos', 'calibVid.mov'))

        # Use a picture as the calibration target
        genv.setTargetType('picture')
        genv.setPictureTarget(os.path.join('images', 'fixTarget.bmp'))

        # Configure the size of the calibration target (in pixels)
        # this option applies only to "circle" and "spiral" targets
        # genv.setTargetSize(24)

        # Beeps to play during calibration, validation and drift correction
        # parameters: target, good, error
        #     target -- sound to play when target moves
        #     good -- sound to play on successful operation
        #     error -- sound to play on failure or interruption
        # Each parameter could be ''--default sound, 'off'--no sound, or a wav file
        genv.setCalibrationSounds('', '', '')

        # resolution fix for macOS retina display issues
        if use_retina:
            genv.fixMacRetinaDisplay()

        #clear the screen before we begin Camera Setup mode
        clear_screen(win,genv)

        # Request Pylink to use the PsychoPy window we opened above for calibration

        pylink.openGraphicsEx(genv)

        # Peform a Camera Setup (eye tracker calibration)
        # skip this step if running the script in Dummy Mode
        if not dummy_mode:
            try:
                el_tracker.doTrackerSetup()
            except RuntimeError as err:
                print('ERROR:', err)
                el_tracker.exitCalibration()
        clear_screen(win,genv)
    CodeComponent saveBreakTime
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        import time
        import psychopy.visual
        thisExp.addData("break.started_Unix", time.time())
        window = psychopy.visual.Window()
        window.getMovieFrame();
      End Routine:
        import time
        import psychopy.visual
        thisExp.addData("break.stopped_Unix", time.time())
        window = psychopy.visual.Window()
        window.saveMovieFrames('frames.png')
  Routine instruction
    RoutineSettingsComponent instruction
      color = -1.0000, -1.0000, -1.0000
      useWindowParams = True
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    TextComponent taskInstructions_2
      font = Courier New
      letterHeight = 30
      startVal [time (s)] = 0
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      text:
        Ready for the experiment?

        Press SPACE key to continue
    KeyboardComponent ready_2
      allowedKeys = 'space'
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent saveInstructTime_2
      Code Type = Auto->JS
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      Begin Routine:
        import time
        import psychopy.visual
        thisExp.addData("instructions.started_Unix", time.time())
        #window = psychopy.visual.Window()
        win.getMovieFrame();
      End Routine:
        import time
        thisExp.addData("instructions.stopped_Unix", time.time())
  Routine eyelinkStartRecording_2
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    CodeComponent elStartRecord_2
      Code Type = Py
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      Begin Routine:
        # This Begin Routine tab of the elStartRecord component draws some feedback
        # graphics (image and a simple shape) on the Host PC, sends a trial start
        # message to the EDF, performs drift check/drift correct, and starts eye tracker
        # recording

        # get a reference to the currently active EyeLink connection
        el_tracker = pylink.getEYELINK()

        # put the tracker in the offline mode first
        el_tracker.setOfflineMode()

        # clear the host screen before we draw the backdrop
        el_tracker.sendCommand('clear_screen 0')
        # imagesAndComponentsStringList value = ['trialImage,image']
        # imagesAndComponentsList value = [['trialImage', 'image']]
        # imagesAndComponentsListString value = [[trialImage, image]]
        # Send image components to the Host PC backdrop to serve as landmarks during recording
        # The method bitmapBackdrop() requires a step of converting the
        # image pixels into a recognizable format by the Host PC.
        # pixels = [line1, ...lineH], line = [pix1,...pixW], pix=(R,G,B)
        # the bitmapBackdrop() command takes time to return, not recommended
        # for tasks where the ITI matters, e.g., in an event-related fMRI task
        # parameters: width, height, pixel, crop_x, crop_y,
        #             crop_width, crop_height, x, y on the Host, drawing options
        # get the array of blank pixels where each pixel corresponds to win.color
        # pixels = blankHostPixels[::]

        # Make a list of image components to be transferred
        # Each item in the list should itself be a list, where the first item is
        # the name of the image file to be transferred and the second
        # is the name of the component handling the presentation of the image
        # imagesAndComponentsListForHostBackdrop = [[targetImage_file+"target.png", image]]
        # go through each image and replace the pixels in the blank array with the image pixels
        # for thisImageFileComponentPair in imagesAndComponentsListForHostBackdrop:
        #    thisImageFile = thisImageFileComponentPair[0]
        #    thisImageComponent = thisImageFileComponentPair[1]
        #    thisImageComponent.setImage(thisImageFile)
        #    if "Image" in str(thisImageComponent.__class__):
        #        # Use the code commented below to convert the image and send the backdrop
        #        im = Image.open(script_path + "/" + thisImageFile)
        #        thisImageComponent.elPos = eyelink_pos(thisImageComponent.pos,[scn_width,scn_height])
        #        thisImageComponent.elSize = eyelink_size(thisImageComponent.size,[scn_width,scn_height])
        #        imWidth = int(round(thisImageComponent.elSize[0]))
        #        imHeight = int(round(thisImageComponent.elSize[1]))
        #        imLeft = int(round(thisImageComponent.elPos[0]-thisImageComponent.elSize[0]/2))
        #        imTop = int(round(thisImageComponent.elPos[1]-thisImageComponent.elSize[1]/2))
        #        im = im.resize((imWidth,imHeight))
                # Access the pixel data of the image
        #        img_pixels = list(im.getdata())
                # Check to see if the image goes off the screen
                # If so, adjust the coordinates appropriately
        #        if imLeft < 0:
        #            imTransferLeft = 0
        #        else:
        #            imTransferLeft = imLeft
        #        if imTop < 0:
        #            imTransferTop = 0
        #        else:
        #            imTransferTop = imTop
        #        if imLeft + imWidth > scn_width:
        #            imTransferRight = scn_width
        #        else:
        #            imTransferRight = imLeft+imWidth
        #        if imTop + imHeight > scn_height:
        #            imTransferBottom = scn_height
        #        else:
        #            imTransferBottom = imTop+imHeight
        #        imTransferImageLineStartX = imTransferLeft-imLeft
        #        imTransferImageLineEndX = imTransferRight-imTransferLeft+imTransferImageLineStartX
        #        imTransferImageLineStartY = imTransferTop-imTop
        #        for y in range(imTransferBottom-imTransferTop):
        #            pixels[imTransferTop+y][imTransferLeft:imTransferRight] = \
        #                img_pixels[(imTransferImageLineStartY + y)*imWidth+imTransferImageLineStartX:\
        #                (imTransferImageLineStartY + y)*imWidth + imTransferImageLineEndX]
        #    else:
        #        print("WARNING: Image Transfer Not Supported For non-Image Component %s)" % str(thisComponent.__class__))
        # transfer the full-screen pixel array to the Host PC
        #el_tracker.bitmapBackdrop(scn_width,scn_height, pixels,\
        #    0, 0, scn_width, scn_height, 0, 0, pylink.BX_MAXCONTRAST)

        # OPTIONAL: draw landmarks and texts on the Host screen
        # In addition to backdrop image, You may draw simples on the Host PC to use
        # as landmarks. For illustration purposes, here we draw a box
        # For a list of supported draw commands, see the "COMMANDS.INI" file on the
        # Host PC (under /elcl/exe)
        left = int(scn_width/2.0) - 60
        top = int(scn_height/2.0) - 60
        right = int(scn_width/2.0) + 60
        bottom = int(scn_height/2.0) + 60
        draw_cmd = 'draw_filled_box %d %d %d %d 1' % (left, top, right, bottom)
        el_tracker.sendCommand(draw_cmd)

        # send a "TRIALID" message to mark the start of a trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        trial_index = 0
        el_tracker.sendMessage('TRIALID %d' % trial_index)

        # record_status_message : show some info on the Host PC
        # here we show how many trial has been tested
        status_msg = 'TRIAL number %d' % trial_index
        el_tracker.sendCommand("record_status_message '%s'" % status_msg)

        # drift check
        # we recommend drift-check at the beginning of each trial
        # the doDriftCorrect() function requires target position in integers
        # the last two arguments:
        # draw_target (1-default, 0-draw the target then call doDriftCorrect)
        # allow_setup (1-press ESCAPE to recalibrate, 0-not allowed)
        # Skip drift-check if running the script in Dummy Mode
        # --- Drift correction ---
        if not dummy_mode:
            if not el_tracker.isConnected() or el_tracker.breakPressed():
                terminate_task(genv, edf_file, session_folder, session_identifier)

            el_tracker.setOfflineMode()
            pylink.pumpDelay(50)

            try:
                error = el_tracker.doDriftCorrect(
                    int(scn_width/2.0),
                    int(scn_height/2.0),
                    1,  # draw_target
                    1   # allow_setup
                )
                # Check result
                if error in [pylink.ESC_KEY, pylink.TERMINATE_KEY]:
                    print("Drift correction cancelled — restarting calibration.")
                    el_tracker.doTrackerSetup()
                else:
                    print("Drift correction successful.")
            except Exception as e:
                print("Drift correction failed:", e)
        else:
            print("Dummy mode: skipping drift correction.")


        # put tracker in idle/offline mode before recording
        el_tracker.setOfflineMode()

        # Start recording
        try:
            el_tracker.startRecording(1, 1, 1, 1)
            pylink.pumpDelay(100)
            print("Recording started.")
            continueRoutine = False
            print("continueRoutine set to False")
            routineTimer.reset()
        except Exception as e:
            print("Start recording failed:", e)
            abort_trial()

        # Allow PsychoPy to move on
        # continueRoutine = False
    CodeComponent saveRecordStartTime_2
      Code Type = Auto->JS
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      Begin Routine:
        import time
        thisExp.addData("el_recording.started_Unix", time.time())
      End Routine:
        import time
        thisExp.addData("el_recording.stopped_Unix", time.time())
  Routine eyelinkStopRecording_2
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    CodeComponent elStopRecord_2
      Code Type = Py
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      End Routine:
        # This End Routine tab of the elStopRecord component clears the
        # screen (and sends a message to mark the clearing), stops recording, sends
        # a trial end message, and increments a trial counter variable

        # clear the screen
        clear_screen(win,genv)
        el_tracker.sendMessage('blank_screen')
        # send a message to clear the Data Viewer screen as well
        el_tracker.sendMessage('!V CLEAR 128 128 128')

        # stop recording; add 100 msec to catch final events before stopping
        pylink.pumpDelay(100)
        el_tracker.stopRecording()

        # send a 'TRIAL_RESULT' message to mark the end of trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        el_tracker.sendMessage('TRIAL_RESULT %d' % 0)

        # update the trial counter for the next trial
        trial_index = trial_index + 1
    CodeComponent saveStopRecordTime_2
      Code Type = Auto->JS
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      Begin Routine:
        import time
        thisExp.addData("el_recordingStop.started_Unix", time.time())
      End Routine:
        import time
        thisExp.addData("el_recordingStop.stopped_Unix", time.time())
  Routine break_2
    RoutineSettingsComponent break_2
      color = -1.0000, -1.0000, -1.0000
      useWindowParams = True
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    TextComponent breakOption_2
      letterHeight = 30
      startVal [time (s)] = 0.0
      units = pix
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      text:
        Do you want to take a break?

        Press O, then O again to continue or M to re-callibrate
    KeyboardComponent key_resp_break_2
      allowedKeys = 'o', 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeReCalibrate_2
      Code Type = Py
      End Routine:
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    CodeComponent saveBreakTime_2
      Code Type = Auto->JS
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      Begin Routine:
        import time
        import psychopy.visual
        thisExp.addData("break.started_Unix", time.time())
        #window = psychopy.visual.Window()
        win.getMovieFrame();
      End Routine:
        import time
        import psychopy.visual
        thisExp.addData("break.stopped_Unix", time.time())
        #window = psychopy.visual.Window()
        #win.saveMovieFrames('frames.png')
  Routine eyelinkSetup_2
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    TextComponent elInstructions_2
      letterHeight = 50
      startVal [time (s)] = 0
      text = Press any key to start Camera Setup
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    KeyboardComponent key_resp_2
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent elConnect_2
      Code Type = Py
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      Before Experiment:
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      Begin Experiment:
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      End Experiment:
        # This End Experiment tab of the elConnect component calls the
        # terminate_task helper function to get the EDF file and close the connection
        # to the Host PC

        # Disconnect, download the EDF file, then terminate the task
        terminate_task(genv,edf_file,session_folder,session_identifier)
      End Routine:
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    CodeComponent saveBeginSetupTime_2
      Code Type = Auto->JS
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      Begin Routine:
        import time
        thisExp.addData("el_setup.started_Unix", time.time())
      End Routine:
        import time
        thisExp.addData("el_recording.stopped_Unix", time.time())
  Routine target
    RoutineSettingsComponent target
      backgroundFit = fill
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 3
      useWindowParams = True
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    TextComponent fixation
      letterHeight = 20
      pos = [0,420]
      startVal [time (s)] = 0
      syncScreenRefresh = False
      units = pix
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      text [set every repeat]:
        The following image is the target image you are looking for.
    ImageComponent targetImage
      image [set every frame] = $targetImage_file + str('target.png')
      size = (750,750)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      units = pix
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    KeyboardComponent resp
      allowedKeys = 'space'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0
      syncScreenRefresh = False
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    CodeComponent elTrial
      Code Type = Py
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      Before Experiment:
        # This variables helps to ensure we don't schedule multiple method calls
        # of eyelink_onFlip_MarkEvents for each retrace
        eyelinkThisFrameCallOnFlipScheduled = False


        # This method gets scheduled to be called on each flip/retrace in the
        # Each Frame tab.  This method  checks for component onsets and sends event
        # marking messgaes and Data Viewe integration messages when these component onsets are detected
        def eyelink_onFlip_MarkEvents(fixation,image,globalClock,scn_width,scn_height):
            global eyelinkThisFrameCallOnFlipScheduled, eyelinkLastFlipTime
            interestAreaMargins = 0

            currentFlipTime = globalClock.getTime()

            #Check whether it is the first retrace of the fixation presentation
            if fixation.tStartRefresh is not None and not fixation.elOnsetDetected:

                # Send an event-marking message for the onset of the image component
                # The message includes a temporal offset based on the current time minus
                # the onset of the stimulus.  Data Viewer will automatically subtract
                # this offset from the message time to position the message at the
                # appropriate time point
                offset = int(round((globalClock.getTime()-fixation.tStartRefresh)*1000))
                el_tracker.sendMessage('%i FIXATION_ONSET' % offset)

                # send some Data Viewer drawing commands so that you can see a representation
                # of the fixation cross in Data Viewer's various visualizations
                # For more information on this, see section "Protocol for EyeLink Data to
                # Viewer Integration" section of the Data Viewer User Manual (Help -> Contents)
                el_tracker.sendMessage('%i !V CLEAR 128 128 128' % offset)
                el_tracker.sendMessage('%i !V DRAWLINE 255 255 255 %i %i %i %i' % \
                    (offset,scn_width/2 - 25,scn_height/2,scn_width/2 + 25,scn_height/2))
                el_tracker.sendMessage('%i !V DRAWLINE 255 255 255 %i %i %i %i' % \
                    (offset,scn_width/2,scn_height/2 - 25,scn_width/2,scn_height/2 + 25))

                # send a Data Viewer interest area command to create an interest area
                # that can be used during analysis
                # For more information on this, see section "Protocol for EyeLink Data to
                # Viewer Integration" section of the Data Viewer User Manual (Help -> Contents)
                el_tracker.sendMessage('%i !V IAREA RECTANGLE 1 %i %i %i %i fixation_cross' % (offset,\
                    fixation.elPos[0]-(fixation.elSize[0]/2+interestAreaMargins),\
                    fixation.elPos[1]-(fixation.elSize[1]/2+interestAreaMargins),\
                    fixation.elPos[0]+(fixation.elSize[0]/2+interestAreaMargins),\
                    fixation.elPos[1]+(fixation.elSize[1]/2+interestAreaMargins)))

                # log the fixation onset time (in Display PC time) as a Trial Variable
                fixationTime = fixation.tStartRefresh*1000
                el_tracker.sendMessage('!V TRIAL_VAR fixationTime %i' % fixationTime)

                # set this property of the component to True to ensure we don't write
                # the event message draw command messages again on future retraces
                fixation.elOnsetDetected = True


            #  Check whether it is the first retrace of the image presentation
            if image.tStartRefresh is not None and not image.elOnsetDetected:

                # Send an event-marking message for the onset of the image component
                # The message includes a temporal offset based on the current time minus
                # the onset of the stimulus.  Data Viewer will automatically subtract
                # this offset from the message time to position the message at the
                # appropriate time point
                offset = int(round((globalClock.getTime()-image.tStartRefresh)*1000))
                el_tracker.sendMessage('%i IMAGE_ONSET' % offset)

                # send some Data Viewer drawing commands so that you can see the trial image
                # in Data Viewer's various visualizations
                # For more information on this, see section "Protocol for EyeLink Data to
                # Viewer Integration" section of the Data Viewer User Manual (Help -> Contents)
                el_tracker.sendMessage('%i !V CLEAR 128 128 128' % offset)
                el_tracker.sendMessage('%i !V IMGLOAD CENTER ../../%s %i %i' % \
                    (offset,targetImage+"target.png",image.elPos[0],image.elPos[1]))

                # send a Data Viewer interest area command to create an interest area
                # that can be used during analysis
                # For more information on this, see section "Protocol for EyeLink Data to
                # Viewer Integration" section of the Data Viewer User Manual (Help -> Contents)
                el_tracker.sendMessage('%i !V IAREA RECTANGLE 2 %i %i %i %i image' % (offset, \
                    image.elPos[0]-(image.elSize[0]/2+interestAreaMargins),\
                    image.elPos[1]-(image.elSize[1]/2+interestAreaMargins),\
                    image.elPos[0]+(image.elSize[0]/2+interestAreaMargins),\
                    image.elPos[1]+(image.elSize[1]/2+interestAreaMargins)))

                # log the image onset time (in Display PC time) as a Trial Variable
                el_tracker.sendMessage('!V TRIAL_VAR IMAGE_ONSET_TIME %i' % \
                    (image.tStartRefresh*1000))

                # set this property of the component to True to ensure we don't write
                # the event message draw command messages again on future retraces
                image.elOnsetDetected = True

            eyelinkThisFrameCallOnFlipScheduled = False



        # This method takes the position of a component and the window size as input
        # and returns the EyeLink position
        # EyeLink position is in pixels, where (0,0) is the top-left corner
        # of the screen, and position increases in value as gaze moves right and down
        # e.g., bottom right of 1920 x 1080 monitor is (1919,1079)
        def eyelink_pos(pos,winSize):
            screenUnitType = 'pix'
            scn_width,scn_height = winSize
            if screenUnitType == 'pix':
                elPos = [pos[0] + scn_width/2,scn_height/2 - pos[1]]
            elif screenUnitType == 'height':
                elPos = [scn_width/2 + pos[0] * scn_height,scn_height/2 + pos[1] * scn_height]
            elif screenUnitType == "norm":
                elPos = [(scn_width/2 * pos[0]) + scn_width/2,scn_height/2 + pos[1] * scn_height]
            else:
                print("ERROR:  Only pixel, height, and norm units supported for conversion to EyeLink position units")
            return [int(round(elPos[0])),int(round(elPos[1]))]

        # this method converts PsychoPy size values to EyeLink size values
        # EyeLink size values are in pixels
        def eyelink_size(size,winSize):
            screenUnitType = 'pix'
            scn_width,scn_height = winSize
            if len(size) == 1:
                size = [size[0],size[0]]
            if screenUnitType == 'pix':
                elSize = [size[0],size[1]]
            elif screenUnitType == 'height':
                elSize = [int(round(scn_height*size[0])),int(round(scn_height*size[1]))]
            elif screenUnitType == "norm":
                elSize = [size[0]/2 * scn_width,size[1]/2 * scn_height]
            else:
                print("ERROR:  Only pixel, height, and norm units supported for conversion to EyeLink position units")
            return [int(round(elSize[0])),int(round(elSize[1]))]
      Begin Experiment:
        # This Begin Experiment tab of the elTrial component just initializes
        # a trial counter variable at the beginning of the experiment

        trial_index = 1

        global eyelinkThisFrameCallOnFlipScheduled
      Begin Routine:
        # This Begin Routine tab of the elTrial component resets some
        # variables that are used to keep track of whether certain trial events have
        # happened and sends trial variable messages to the EDF to mark condition
        # information

        # these variables keep track of whether the fixation presentation, image
        # presentation, and trial response have occured yet (0 = no, 1 = yes).
        # They later help us to ensure that each event marking message only gets
        # sent once, at the time of each event
        fixation.elOnsetDetected = False
        image.elOnsetDetected = False

        # Set elPos and elSize properties for the components by calling
        # methods that convert from PsychoPy units to EyeLink units
        image.elPos = eyelink_pos(image.pos,[scn_width,scn_height])
        image.elSize = eyelink_size(image.size,[scn_width,scn_height])
        fixation.elPos = eyelink_pos(fixation.pos,[scn_width,scn_height])
        fixation.elSize = eyelink_size(fixation.size,[scn_width,scn_height])

        # create a keyboard instance and reinitialize a kePressNameList, which
        # will store list of key names currently being pressed (to allow Ctrl-C abort)
        kb = keyboard.Keyboard()
        keyPressNameList = list()

        # record trial variables to the EDF data file, for details, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        el_tracker.sendMessage('!V TRIAL_VAR trials %s' % trials.thisN)
        el_tracker.sendMessage('!V TRIAL_VAR iterations %s' % iterations.thisN)
        el_tracker.sendMessage('!V TRIAL_VAR image %s' % targetImage)
        el_tracker.sendMessage('!V TRIAL_VAR Unix Time %s' % time.time())
        # if sending many messages in a row, add a 1 msec pause between after
        # every 5 messages or so


        #routineTimer.reset()
      End Routine:
        # This End Routine tab of the elTrial component handles the marking
        # of response events via messages to the EDF and sends additional messages
        # to log data about the response as trial variables.  It also marks the end
        # of the trial

        # if a key was presssed, calculate the difference between the current time
        # and the time of the key press onset.
        # This offset value will be sent at the beginning of the message
        # and will automatically be subtracted by Data Viewer from the timestamp
        # of the message to position the message at the correct point in time
        # then send a message marking the event
        if not isinstance(resp.rt,list):
            offsetValue = int(round((globalClock.getTime() - \
                (resp.tStartRefresh + resp.rt))*1000))
            el_tracker.sendMessage('%i KEY_PRESSED' % offsetValue)
            el_tracker.sendMessage('!V TRIAL_VAR accuracy %i' % resp.corr)
            el_tracker.sendMessage('!V TRIAL_VAR keyPressed %s' % resp.keys)
            # if sending many messages in a row, add a 1 msec pause between after
            # every 5 messages or so
            time.sleep(0.001)
            el_tracker.sendMessage('!V TRIAL_VAR RT %i' % int(round(resp.rt * 1000)))
    CodeComponent codeSaveTimeTarget
      Code Type = Py
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      Begin Routine:
        import time
        import psychopy.visual
        win.callOnFlip(lambda: thisExp.addData("target.started_flip_Unix", time.time()))
        thisExp.addData("target.started_Unix", time.time())
        #window = psychopy.visual.Window()
        win.getMovieFrame();
      End Routine:
        import time
        win.callOnFlip(lambda: thisExp.addData("target.stopped_flip_Unix", time.time()))
        thisExp.addData("target.stopped_Unix", time.time())
  Routine fixationCross
    RoutineSettingsComponent fixationCross
      color = -1.0000, -1.0000, -1.0000
      useWindowParams = True
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    ImageComponent imageFixationCross
      image = images/fixTarget.bmp
      size = (80, 80)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    CodeComponent unix_timestamp
      Code Type = Auto->JS
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      Begin Routine:
        import time
        import psychopy.visual
        thisExp.addData("fixation.started_Unix", time.time())
        #window = psychopy.visual.Window()
        win.getMovieFrame();
      End Routine:
        import time
        thisExp.addData("fixation.stopped_Unix", time.time())
  Routine ISI_2
    RoutineSettingsComponent ISI_2
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 2
      useWindowParams = True
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    StaticComponent ISI_3
      saveData = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
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      code:
        fixDur = 0

        fixDur = 3 + (3.5 - 3) * random()
    CodeComponent codeISI
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import time
      Begin Experiment:
        fixDur = 0
      Begin Routine:
        import time
        import psychopy.visual
        #window = psychopy.visual.Window()
        fixDur = (1000 + random.randrange(250, 750, 250) ) / 1000

        thisExp.addData('ISI_dur', fixDur)

        thisExp.addData("ISI.started_Unix", time.time())
        win.getMovieFrame();
      End Routine:
        import time
        thisExp.addData("ISI.stopped_Unix", time.time())
  Routine TaskRoutine
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    TextComponent Task
      font = Courier New
      letterHeight = 30
      startVal [time (s)] = 0.0
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      text:
        Read the following situation and then write what you would say in that situation.

        Press SPACE to continue
    KeyboardComponent ready_3
      allowedKeys = 'space'
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent saveTaskTime
      Code Type = Auto->JS
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      Begin Routine:
        import time
        import psychopy.visual
        thisExp.addData("task.started_Unix", time.time())
        #window = psychopy.visual.Window()
        win.getMovieFrame();
      End Routine:
        import time
        thisExp.addData("task.stopped_Unix", time.time())
  Routine PauseRoutine
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    TextComponent Pause
      durationEstim = 10
      font = Courier New
      letterHeight = 30
      startVal [time (s)] = 0.0
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      text:
        Do you need a break?

        If yes, do not press anything.

        If not, press SPACE to continue
    CodeComponent savePauseTime
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import event
      Begin Routine:
        import time
        thisExp.addData("task.started_Unix", time.time())
        print("Pause?")

        if (ScenarioLoop.thisN + 1) % 5 != 0:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'space' in keys:
            continueRoutine = False
            event.clearEvents()
      End Routine:
        import time
        thisExp.addData("task.stopped_Unix", time.time())
Flow
  Routine eyelinkSetup_2
  Routine instruction
  Routine eyelinkStartRecording_2
  LoopInitiator ScenarioLoop loopType="TrialHandler"
    conditionsFile = scenarios.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'scenario': 'You need to run a few errands downtown which you think \nmay take you an hour. You go to your manager’s office at \nwork with whom you get on well and ask him to cover for \nyou. What do you say to him?', 'Alignment': 'high'},
      {'scenario': 'You invited friends for a cozy dinner. At the end, one says: “It was a nice evening!” You answer:', 'Alignment': 'medium'},
      {'scenario': 'You are on your first day of the new semester and you found yourself lost on your way to the meeting room at the new Administration Building. You are unsure of the location of the exact meeting room. You want to ask for the location from a classmate you just met. You say:', 'Alignment': 'low'},
      {'scenario': "You just met a new friend online; he invites you and some of your other friends to his new house tomorrow for lunch. You can't attend as you are required to accompany your parents to the hospital. You refuse by saying?", 'Alignment': 'high'},
      {'scenario': 'You are a graduate student preparing for a conference presentation. You realize that you left your USB stick with your slides at home. One of your classmates lives near your house. You call him to ask if he can go by and bring it to you. What do you say to him?', 'Alignment': 'medium'}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
    Routine TaskRoutine
    Routine PromptRoutine
    Routine WaitRoutine
    Routine AIRoutine
    Routine RatingRoutine
    Routine PauseRoutine
  LoopTerminator ScenarioLoop
  Routine eyelinkStopRecording_2
  Routine thanks
